
  <!-- Point Grey camera for the focus lock -->
    <pgrey_camera>
      <class_name type="string">PointGreyLockCamera</class_name>
      <module_name type="string">storm_control.sc_hardware.pointGrey.pointGreyLockCameraModule</module_name>
      <configuration>
		<parameters>
		  <offset_has_center_bar type="boolean">True</offset_has_center_bar>
		  <offset_maximum type="float">1.0</offset_maximum>
		  <offset_minimum type="float">-1.0</offset_minimum>
		  <offset_warning_high type="float">0.8</offset_warning_high>
		  <offset_warning_low type="float">-0.8</offset_warning_low>
		  <sum_maximum type="float">500.0</sum_maximum>
		  <sum_minimum type="float">0.0</sum_minimum>
		  <sum_warning_low type="float">50.0</sum_warning_low>
		</parameters>
		<auto_focus type="boolean">True</auto_focus> 
		<!--<single_spot type="boolean">True</single_spot>  -->
		<camera_id type="string">21053777</camera_id>
		<camera_parameters>
		  
			<BlackLevel type="float">1.0</BlackLevel>
			<Gain type="float">1.0</Gain>

			<!--looks like exposure time is hard coded into pointGreyLockCamera.py ~line 110-->
			<AcquisitionFrameRate type="float">30.0</AcquisitionFrameRate>
			<exposure_time type="float">0.010001999999999999</exposure_time>	  
			<video_mode type="string">Mode0</video_mode>
			<PixelFormat type="string">Mono16</PixelFormat>

			<Height type="int">200</Height>  
			<Width type="int">200</Width>   <!-- 120 -->
			<OffsetX type="int">200</OffsetX>
			<OffsetY type="int">200</OffsetY>
			<min_good type="int">4</min_good>  <!-- 5 -->
			<reps type="int">10</reps>  <!-- 10 -->
			<sum_scale type="float">1.0e-8</sum_scale>
			<sum_zero type="float">17.0</sum_zero>
			<zero_dist type="float">10.0</zero_dist>
			<!-- af specific pars -->
			<!-- auto focus splits top and bottom, to avoid crossing spots -->
			<roi1 type="string">0,199,0,99</roi1>  
			<roi2 type="string">0,199,100,199</roi2> 
			<background type="float">2.0</background> 
			<downsample type="int">8</downsample> 
			<!-- ss specific pars -->
			<offset type="float">60.0</offset>  
			<sigma type="float">10.0</sigma> 
			<threshold type="float">200.0</threshold>
		</camera_parameters>
	<units_to_microns type="float">10.0</units_to_microns> 		  <!-- 0.19 -->
      </configuration>
    </pgrey_camera>