<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

  <!-- The starting directory. -->
  <directory type="directory">C:\Data\</directory>

  <!-- The setup name -->
  <setup_name type="string">scope5</setup_name>

  <!-- The ui type, this is 'classic' or 'detached' -->
  <ui_type type="string">classic</ui_type>

  <!--
      This has two effects:

      (1) If this is True any exception will immediately crash HAL, which can
      be useful for debugging. If it is False then some exceptions will be
      handled by the modules.

      (2) If it is False we also don't check whether messages are valid.
  -->
  <strict type="boolean">False</strict>

  <!--
      Define the modules to use for this setup.
  -->
  <modules>

    <!--
	This is the main window, you must have this.
    -->
    <hal>
      <module_name type="string">storm_control.hal4000.hal4000</module_name>
      <class_name type="string">HalController</class_name>
    </hal>

    <!--
	You also need all of these.
    -->

    <!-- Camera display. -->
    <display>
      <class_name type="string">Display</class_name>
      <module_name type="string">storm_control.hal4000.display.display</module_name>
      <parameters>

	<!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
	<colortable type="string">ramp.ctbl</colortable>

      </parameters>
    </display>

    <!-- Feeds. -->
    <feeds>
      <class_name type="string">Feeds</class_name>
      <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
    </feeds>

    <!-- Filming and starting/stopping the camera. -->
    <film>
      <class_name type="string">Film</class_name>
      <module_name type="string">storm_control.hal4000.film.film</module_name>

      <!-- Film parameters specific to this setup go here. -->
      <parameters>
	<extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
      </parameters>
    </film>

    <!-- Which objective is being used, etc. -->
    <mosaic>
      <class_name type="string">Mosaic</class_name>
      <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

      <!-- List objectives available on this setup here. -->
      <parameters>
		<flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">True</flip_horizontal>
		<flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
		<transpose desc="Transpose image (mosaic)" type="boolean">True</transpose>

		<objective desc="Current objective" type="string" values="obj1,obj2,obj3">obj1</objective>
		<obj1 desc="Objective 1" type="custom">60x,0.108,0.0,0.0</obj1>
		<obj2 desc="Objective 2" type="custom">20x,0.324,0.0,0.0</obj2>
		<obj3 desc="Objective 3" type="custom">10x,0.648,0.0,0.0</obj3>
      </parameters>
    </mosaic>

    <!-- Loading, changing and editting settings/parameters -->
    <settings>
      <class_name type="string">Settings</class_name>
      <module_name type="string">storm_control.hal4000.settings.settings</module_name>
    </settings>

    <!-- Set the time base for films. -->
    <timing>
      <class_name type="string">Timing</class_name>
      <module_name type="string">storm_control.hal4000.timing.timing</module_name>
      <parameters>
		<time_base type="string">camera1</time_base>
      </parameters>
    </timing>

    <!--
	Everything else is optional, but you probably want at least one camera.
    -->

    <!-- Camera control. -->
    <!--
	Note that the cameras must have the names "camera1", "camera2", etc..

	Cameras are either "master" (they provide their own hardware timing)
	or "slave" they are timed by another camera. Each time the cameras
	are started the slave cameras are started first, then the master cameras.
    -->

    
     <camera1>
      <class_name type="string">Camera</class_name>
      <module_name type="string">storm_control.hal4000.camera.camera</module_name>
      <camera>
        <master type="boolean">True</master>
        <class_name type="string">HamamatsuCameraControl</class_name>
        <module_name type="string">storm_control.hal4000.camera.hamamatsuCameraControl</module_name>
        <parameters>
          <!-- Which camera to use -->
          <camera_id type="int">0</camera_id>
          <!-- These are the display defaults, not the camera range. -->
          <default_max type="int">2000</default_max> 
          <default_min type="int">100</default_min>
          <flip_horizontal type="boolean">True</flip_horizontal>
          <flip_vertical type="boolean">False</flip_vertical>
          <transpose type="boolean">True</transpose>         

          <!-- This is the extension to use (if any) when saving data from this camera. -->
          <extension type="string"></extension>
          
          <!-- Whether or not data from this camera is saved during filming. -->
          <saved type="boolean">True</saved>
        </parameters>
      </camera>
    </camera1>

	

	
	
  <!-- DAQ control -->
    <daq>
      <module_name type="string">storm_control.sc_hardware.nationalInstruments.nidaqModule</module_name>
      <class_name type="string">NidaqModule</class_name>

      <configuration>
	<!-- This is the default timing source to use while filming. "Oversampled"
	     films will use the counter for timing. The counter is driven by the
	     camera fire pin. Other films will just use the camera fire pin directly.
		 rising_edge specifies whether the counter is incremented upon the 
		 rising (True) or falling (False) edge of the camera signal
	-->
        <timing>
          <camera_fire_pin type="string">/Dev3/PFI8</camera_fire_pin>  <!-- PFI8 = ctr0 source -->
          <counter type="string">/Dev3/ctr0</counter>   <!-- ctr0 -->
		  <counter_out type="string">/Dev3/PFI12</counter_out> <!-- PFI12 = ctr0 out.  Not actually used-->
          <rising_edge type="boolean">True</rising_edge>   <!-- falling edge -->
        </timing>
        
        <!-- These are the things that we provide DAQ functionality for.
             Other modules will request them with a 'get functionality'
             message and "name" = "daq.xxx.yyy". -->
        <ilm750>
          <do_task>
            <source type="string">/Dev3/port0/line4</source>
          </do_task>
        </ilm750>

        <ilm647>
          <do_task>
            <source type="string">/Dev3/port0/line3</source>
          </do_task>      
        </ilm647>

        <ilm561>
          <do_task>
            <source type="string">/Dev3/port0/line2</source>
          </do_task>
        </ilm561>

        <ilm488>
          <do_task>
            <source type="string">/Dev3/port0/line1</source>
          </do_task>
        </ilm488>

        <ilm405>
          <do_task>
            <source type="string">/Dev3/port0/line0</source>
          </do_task>
        </ilm405>   

        <mcl>
          <ao_task>
            <source type="string">/Dev3/ao0</source>
          </ao_task>
        </mcl>        
		

      </configuration>
    </daq>





    <!-- Illumination (lasers, shutters, etc) control GUI. -->
    <illumination>
      <class_name type="string">Illumination</class_name>
      <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
       
      <configuration>
       
        <ch1>
          <gui_name type="string">750</gui_name>
          <color type="string">140,0,0</color>
          <amplitude_modulation>
            <hw_fn_name>Lumencor750</hw_fn_name>
          </amplitude_modulation>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm750.do_task</hw_fn_name>
          </digital_modulation> 
        </ch1>
        <ch2>
          <gui_name type="string">635</gui_name>
          <color type="string">255,0,0</color>
          <amplitude_modulation>
            <hw_fn_name>Lumencor647</hw_fn_name>
          </amplitude_modulation> 
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm647.do_task</hw_fn_name>
          </digital_modulation>
        </ch2>
        <ch3>
          <gui_name type="string">545</gui_name>
          <color type="string">55,255,0</color>
          <amplitude_modulation>
            <hw_fn_name>Lumencor561</hw_fn_name>
          </amplitude_modulation>  
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm561.do_task</hw_fn_name>
          </digital_modulation>
        </ch3>
        <ch4>
          <gui_name type="string">473</gui_name>
          <color type="string">0,200,255</color>
          <amplitude_modulation>
            <hw_fn_name>Lumencor488</hw_fn_name>
          </amplitude_modulation>      
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm488.do_task</hw_fn_name>
          </digital_modulation>
        </ch4>
        <ch5>
          <gui_name type="string">408</gui_name>
          <color type="string">225,0,255</color>
          <amplitude_modulation>
            <hw_fn_name>Lumencor405</hw_fn_name>
          </amplitude_modulation>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm405.do_task</hw_fn_name>
          </digital_modulation> 
        </ch5>
      </configuration> 
    </illumination>
   

    <!-- Lumencor laser control. -->
    <Lumencor405>
      <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
      <class_name type="string">Celesta</class_name>
      <configuration>
    <ip type="string">192.168.201.200</ip>
    <laser_id type="int">0</laser_id>
    <used_during_filming type="boolean">True</used_during_filming>
      </configuration>
    </Lumencor405>
    
    <Lumencor488>
      <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
      <class_name type="string">Celesta</class_name>
      <configuration>
    <ip type="string">192.168.201.200</ip>
    <laser_id type="int">2</laser_id>
    <used_during_filming type="boolean">True</used_during_filming>
      </configuration>
    </Lumencor488>
    
    <Lumencor561>
      <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
      <class_name type="string">Celesta</class_name>
      <configuration>
    <ip type="string">192.168.201.200</ip>
    <laser_id type="int">4</laser_id>
    <used_during_filming type="boolean">True</used_during_filming>
      </configuration>
    </Lumencor561>
    
    <Lumencor647>
      <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
      <class_name type="string">Celesta</class_name>
      <configuration>
    <ip type="string">192.168.201.200</ip>
    <laser_id type="int">6</laser_id>
    <used_during_filming type="boolean">True</used_during_filming>
      </configuration>
    </Lumencor647>
    
    <Lumencor750>
      <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
      <class_name type="string">Celesta</class_name>
      <configuration>
    <ip type="string">192.168.201.200</ip>
    <laser_id type="int">7</laser_id>
    <used_during_filming type="boolean">True</used_during_filming>2
      </configuration>
    </Lumencor750>

    <!-- end of illumination configuration -->




 
	<!-- Ludl XY stage -->
    <ludl_stage>
      <module_name type="string">storm_control.sc_hardware.ludl.ludlModule</module_name>
      <class_name type="string">LudlStageRS232</class_name>     
      <configuration>	
        <com_port type="string">COM8</com_port>  <!-- LUDL STAGE COM PORT -->
      </configuration>
    </ludl_stage>

    <!-- Stage control GUI -->
    <stage>
      <class_name type="string">Stage</class_name>
      <module_name type="string">storm_control.hal4000.stage.stage</module_name>
      <configuration>
	<stage_functionality type="string">ludl_stage</stage_functionality>
      </configuration>
    </stage>
	
    <!-- TCP control -->
    <tcp_control>
      <module_name type="string">storm_control.hal4000.tcpControl.tcpControl</module_name>
      <class_name type="string">TCPControl</class_name>
      <configuration>
	<parallel_mode type="boolean">True</parallel_mode>
	<tcp_port type="int">9000</tcp_port>
      </configuration>
    </tcp_control>

   <!-- Focus lock control GUI. -->
    <focuslock>
      <class_name type="string">FocusLock</class_name>
      <module_name type="string">storm_control.hal4000.focusLock.focusLock</module_name>
      <configuration>
		<ir_laser type="string">none_irlaser</ir_laser>
        <ir_power type="int">10</ir_power>
		<lock_modes type="string">NoLockMode,AlwaysOnLockMode,CalibrationLockMode,ZScanLockMode,HardwareZScanLockMode</lock_modes>
		<qpd type="string">pgrey_camera</qpd>
		<z_stage type="string">mcl_zstage</z_stage>
		<parameters>
			  <find_sum>
				<step_size type="float">1.0</step_size>
			  </find_sum>
			  <locked>
				<buffer_length type="int">10</buffer_length>
				<lock_gain type="float">0.1</lock_gain>
				<offset_threshold type="float">200.0</offset_threshold>
			  </locked>
			  <jump_size type="float">0.1</jump_size>
		</parameters>
      </configuration>
    </focuslock> 

    <none_irlaser>
      <module_name type="string">storm_control.sc_hardware.none.noneIRLaserModule</module_name>
      <class_name type="string">NoneIRLaserModule</class_name>
    </none_irlaser>


<!-- Ludl Z piezo -->
    <mcl_zstage>
      <module_name type="string">storm_control.sc_hardware.ludl.ludlVoltageZModule</module_name>     
      <class_name type="string">LudlVoltageZ</class_name>
      <configuration>
        <parameters>
          <center type="float">175.0</center>
          <has_center_bar type="boolean">True</has_center_bar>
          <maximum type="float">350.0</maximum>
          <minimum type="float">0.0</minimum>
          <warning_high type="float">330.0</warning_high>
          <warning_low type="float">20.0</warning_low>
        </parameters>
        <ao_fn_name type="string">daq.mcl.ao_task</ao_fn_name>
        <microns_to_volts type="float">0.029</microns_to_volts>  <!--was .05 for 200um/10V updated following hbaic_pgrey_2cam -->
      </configuration>
    </mcl_zstage>

<pgrey_camera>
      <class_name type="string">PointGreyLockCameraTwoSpot</class_name>  <!-- PointGreyLockCamera -->
      <module_name type="string">storm_control.sc_hardware.pointGrey.pointGreyLockCameraModule</module_name>
      <configuration>
		<parameters>   
			<offset_has_center_bar type="boolean">True</offset_has_center_bar>
			<offset_maximum type="float">70.0</offset_maximum>
			<offset_minimum type="float">10.0</offset_minimum>
			<offset_warning_high type="float">68</offset_warning_high>
			<offset_warning_low type="float">12</offset_warning_low>
			<sum_maximum type="float">100.0</sum_maximum>
			<sum_minimum type="float">0.0</sum_minimum>
			<sum_warning_low type="float">1.0</sum_warning_low>  
		</parameters>
		<auto_focus type="boolean">False</auto_focus>
		<!-- device id from spinview-->
		<camera_id type="string">21053777</camera_id>
		<camera_parameters>	  
			<BlackLevel type="float">1.0</BlackLevel>
			<Gain type="float">1.0</Gain>
			<AcquisitionFrameRate type="float">300.0</AcquisitionFrameRate>  <!-- was 30-->
            <ExposureTime type="float">500.0</ExposureTime>  <!-- was 2000.0-->
			<!--set the roi for the two spots -->
			<Height type="int">128</Height>
			<Width type="int">128</Width>
			<OffsetX type="int">268</OffsetX>
			<OffsetY type="int">220</OffsetY>	  
			<background type="float">1.0</background>
			<downsample type="int">1</downsample>
			<offset type="float">1.0</offset>
			<min_good type="int">4</min_good>
			<reps type="int">10</reps>
			<sigma type="float">2.6</sigma>
			<sum_scale type="float">0.02</sum_scale>
			<sum_zero type="float">10.0</sum_zero>
			<threshold type="float">200.0</threshold>
			<zero_dist type="float">0.0</zero_dist>  <!-- moves the absolute value of the offset. which is also affected by unit_to_microns -->
			<roi1 type="string"> 0,127,0,63  </roi1>  <!-- 0,127,0,63  -->
			<roi2 type="string"> 0,127,64,127</roi2>  <!--  0,127,64,127 -->		 
		</camera_parameters>
		<units_to_microns type="float">1.0</units_to_microns> <!-- affects direction and speed of piezo response: still a bit slow, could be larger? -->
      </configuration>  
    </pgrey_camera>


  </modules>

</config>
